CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20141021164117
GitHash:00c0426
ModuleCount:51
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|
    Name of the file:filelist_analysis.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

MeasureImageQuality:[module_num:2|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notes:['This module is needed to collect the 2-class and 3-class thresholds needed for the next step.']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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:2
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigHoechst
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Select the images to measure:OrigCellMask
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

CalculateMath:[module_num:3|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notes:['An attempt to set a debris threshold by taking the sum of the Otsu 2-class and 3-class w/background thresholds. The idea is to dial up the threshold to a point where the detected objects are more likely to be separated since the brigher portions will be found. Using the 3-class w/background is an added boost since it is biased towards higher values in the presence of bright debris.This value will be used later.']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
    Name the output measurement:BrightThreshold
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:ImageQuality_ThresholdOtsu_OrigHoechst_2W
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the second operand measurement type:Image
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    Select the second operand measurement:ImageQuality_ThresholdOtsu_OrigHoechst_3BW
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1
    Add to the result:0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
IdentifyPrimaryObjects:[module_num:4|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notes:['Threshold the image using the value just calculated. No declumping is needed since we want to keep the debris as a contiguous objetc. Then set the min size filter to a value larger than most nuclei.']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
    Select the input image:OrigHoechst
    Name the primary objects to be identified:BrightROI
    Typical diameter of objects, in pixel units (Min,Max):40,1000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Measurement
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    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1.0
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    Select the measurement to threshold with:Math_BrightThreshold
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
MeasureImageIntensity:[module_num:5|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notes:['Measure the intensity of the bright ROI against the CellMask channel.']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
    Select the image to measure:OrigCellMask
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:BrightROI

FlagImage:[module_num:6|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notes:['Flag the image as containing debris if (a) a bright ROI was found, and (b) the CellMask intensity underneath is low. Flag it as containing a cell clump if   (a) a bright ROI was found, and (b) the CellMask intensity underneath is high.']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
    Hidden:2
    Hidden:2
    Name the flag's category:Metadata
    Name the flag:isDebris
    Flag if any, or all, measurement(s) fails to meet the criteria?:Flag if all fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:Intensity_LowerQuartileIntensity_OrigCellMask_BrightROI
    Flag images based on low values?:Yes
    Minimum value:0.2
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Count_BrightROI
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.0
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    Hidden:2
    Name the flag's category:Metadata
    Name the flag:isCellClump
    Flag if any, or all, measurement(s) fails to meet the criteria?:Flag if all fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:Intensity_LowerQuartileIntensity_OrigCellMask_BrightROI
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.2
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    Flag is based on:Whole-image measurement
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    Which measurement?:Count_BrightROI
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.0
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
IdentifySecondaryObjects:[module_num:7|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notes:["Expand the bright ROI object to capture the large mass in the CellMask channel,if a cell clump. If it's debris, this won't expand much beyond the primary object. Lower bound on threshold is set based on noise level from empty wells."]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
    Select the input objects:BrightROI
    Name the objects to be identified:ExpandedBrightROI
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigCellMask
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    Regularization factor:0.05
    Name the outline image:BrightROIOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.002,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MaskImage:[module_num:8|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notes:['Mask the Hoechst image with the expanded bright regions.']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
    Select the input image:OrigHoechst
    Name the output image:MaskedHoechst
    Use objects or an image as a mask?:Objects
    Select object for mask:ExpandedBrightROI
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify nuclei from the masked Hoechst image. Lower bound on threshold is set based on noise level from empty wells.']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
    Select the input image:MaskedHoechst
    Name the primary objects to be identified:UnsegmentedNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:10|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notes:['Convert nuclei to a binary image of the foreground.']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
    Select the input objects:UnsegmentedNuclei
    Name the output image:Foreground
    Select the color format:Binary (black & white)
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
Morph:[module_num:11|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notes:['Invert the pixel intensities of the foreground image, and take the distance transform (DT). This new image labels each pixel of the image with the distance to the nearest nucleus. The idea is that scratches/well edges will appear as contiguous regions of unusually large distances.']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
    Select the input image:Foreground
    Name the output image:DistanceTransform
    Select the operation to perform:invert
    Number of times to repeat operation:Once
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    Scale:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Scale:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
    Rescale values from 0 to 1?:No

MaskImage:[module_num:12|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notes:['Mask the DT so that the 0-labeled nuclei will not be considered in measurements from this image.']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
    Select the input image:DistanceTransform
    Name the output image:MaskedDistanceTransform
    Use objects or an image as a mask?:Objects
    Select object for mask:UnsegmentedNuclei
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:13|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notes:['Measure the intensity (i.e, distance) statistics from the DT image.']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
    Select the image to measure:MaskedDistanceTransform
    Measure the intensity only from areas enclosed by objects?:No
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
CalculateMath:[module_num:14|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notes:["What is an unsually large distance to indicate a scratch/well edge? I've chosen to mark outliers based on the upper fence of the DT distribution. First, calculate the interquartile range (IQR)"]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
    Name the output measurement:DistanceTransformIQR
    Operation:Subtract
    Select the minuend measurement type:Image
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    Select the minuend measurement:Intensity_UpperQuartileIntensity_MaskedDistanceTransform
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Image
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    Select the subtrahend measurement:Intensity_LowerQuartileIntensity_MaskedDistanceTransform
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:15|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notes:["The upper inner fence is officially Q3 + 1.5*IQR. I've chosen 0.75*IQR since it produces better results."]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
    Name the output measurement:UpperInnerFence
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:Intensity_UpperQuartileIntensity_MaskedDistanceTransform
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:Math_DistanceTransformIQR
    Multiply the above operand by:0.75
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ImageMath:[module_num:16|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notes:['In CellProfiler, any thresholding is performed only on the [0,1] range, so I need to workaround it in order to threshold the DT. First, subtract the DT cutoff from the DT pixel values, so that the cutoff distance is set to 0.']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DistanceCutoff
    Image or measurement?:Image
    Select the first image:DistanceTransform
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Math_UpperInnerFence

ApplyThreshold:[module_num:17|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notes:['From the cutoff image, threshold manually with a value of 0. Regions above 0 are candidates for scratches or well edges.']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
    Select the input image:DistanceCutoff
    Name the output image:BinaryDistanceCutoff
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.0
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
Morph:[module_num:18|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notes:["Skeletonize the binary cutoff image. Using 'skelPE' has a few less spurs than the 'skel' operation alone, but a few still remain. Spur the line segments to reduce them. I've chosen 25 as the repetition number since that seems to be the average half-distance between nuclei."]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
    Select the input image:BinaryDistanceCutoff
    Name the output image:DistanceTransformSkeleton
    Select the operation to perform:skelpe
    Number of times to repeat operation:Once
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    Scale:100
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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    Select the operation to perform:spur
    Number of times to repeat operation:Custom
    Repetition number:25
    Scale:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:19|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notes:['Identify all skeletons from the binary image as objects.']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
    Select the input image:DistanceTransformSkeleton
    Name the primary objects to be identified:AllSkeletons
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Name the outline image:AllSkeletonOutlines
    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:20|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notes:['Measure the morphological features of the skeleton objects.']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
    Select objects to measure:AllSkeletons
    Calculate the Zernike features?:No

ImageMath:[module_num:21|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notes:["Since I need to define the scratch region for exclusion, I found that simply using the upper inner fence doesn't work well for well edges, especially when they are large. Since I set the distance cutoff to 25 pixels for any region defined as a scratch."]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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:-25
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DistanceManualCutoff
    Image or measurement?:Image
    Select the first image:DistanceTransform
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifySecondaryObjects:[module_num:22|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notes:['Define the scratch/well edge region as an object based on the skeletons.']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
    Select the input objects:AllSkeletons
    Name the objects to be identified:AllScratches
    Select the method to identify the secondary objects:Propagation
    Select the input image:DistanceManualCutoff
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.5
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
FilterObjects:[module_num:23|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notes:['Filter the skeletons based on the two measurements and cutoffs which I determined using CellProfiler Analyst. The scratch region assocaited with any filtered skeletons are also retained.']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
    Name the output objects:FilteredSkeletons
    Select the object to filter:AllSkeletons
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:2
    Additional object count:1
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    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:Yes
    Minimum value:220
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MaxFeretDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:710
    Filter using a maximum measurement value?:No
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    Select additional object to relabel:AllScratches
    Name the relabeled objects:Scratches
    Retain outlines of relabeled objects?:Yes
    Name the outline image:ScratchOutlines

MeasureImageAreaOccupied:[module_num:24|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notes:['Measure the image area occupied by the scratch region.']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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Scratches
    Retain a binary image of the object regions?:No
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
CalculateMath:[module_num:25|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notes:['The image area that counts as covered is the total image minus the scratch/well edge area, if any.']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
    Name the output measurement:CoveredArea
    Operation:Subtract
    Select the minuend measurement type:Image
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    Select the minuend measurement:AreaOccupied_TotalArea_Scratches
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Image
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    Select the subtrahend measurement:AreaOccupied_AreaOccupied_Scratches
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FlagImage:[module_num:26|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notes:['Flag the image if there are any skeletons that survived the filtering.']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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:isScratchOrWell
    Flag if any, or all, measurement(s) fails to meet the criteria?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:Count_FilteredSkeletons
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0
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
MaskImage:[module_num:27|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notes:['Mask the Hoechst image with the nuclei objects to create a foreground image.']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
    Select the input image:OrigHoechst
    Name the output image:ForegroundHoechst
    Use objects or an image as a mask?:Objects
    Select object for mask:UnsegmentedNuclei
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    Invert the mask?:No

MaskImage:[module_num:28|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notes:['Mask the Hoechst image with the inverted nuclei objects to create a background image.']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
    Select the input image:OrigHoechst
    Name the output image:BackgroundHoechst
    Use objects or an image as a mask?:Objects
    Select object for mask:UnsegmentedNuclei
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:29|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notes:['Measure the intensity statistics from the foreground and background images.']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
    Select the image to measure:ForegroundHoechst
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:BackgroundHoechst
    Measure the intensity only from areas enclosed by objects?:No
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
CalculateMath:[module_num:30|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notes:['Now we calculate the image signal-to-nose ratio (SNR). Rather than using the standard (mean foreground)/(variance background), I use the more-robust median/IQR. First, calculate the IQR of the background pixels.']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
    Name the output measurement:BackgroundHoechstIQR
    Operation:Subtract
    Select the minuend measurement type:Image
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    Select the minuend measurement:Intensity_UpperQuartileIntensity_BackgroundHoechst
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Image
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    Select the subtrahend measurement:Intensity_LowerQuartileIntensity_BackgroundHoechst
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:31|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notes:['Calculate the SNR of the Hoechst image as the (median foreground)/(IQR background)']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
    Name the output measurement:RobustHoechstSNR
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MedianIntensity_ForegroundHoechst
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Math_BackgroundHoechstIQR
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FlagImage:[module_num:32|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notes:["Based on the SNR distribution, I've set the cutoff as 30."]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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:isLowIntensity
    Flag if any, or all, measurement(s) fails to meet the criteria?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:Math_RobustHoechstSNR
    Flag images based on low values?:Yes
    Minimum value:30
    Flag images based on high values?:No
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
CorrectIlluminationApply:[module_num:33|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
    Select the input image:OrigHoechst
    Name the output image:Hoechst
    Select the illumination function:IllumHoechst
    Select how the illumination function is applied:Divide
    Select the input image:OrigAlexa568
    Name the output image:Alexa568
    Select the illumination function:IllumAlexa568
    Select how the illumination function is applied:Divide
    Select the input image:OrigCellMask
    Name the output image:CellMask
    Select the illumination function:IllumCellMask
    Select how the illumination function is applied:Divide

MaskImage:[module_num:34|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
    Select the input image:Hoechst
    Name the output image:MaskedCorrectedHoechst
    Use objects or an image as a mask?:Objects
    Select object for mask:ExpandedBrightROI
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:35|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
    Select the input image:MaskedCorrectedHoechst
    Name the primary objects to be identified:AllNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MaskImage:[module_num:36|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
    Select the input image:CellMask
    Name the output image:MaskedCorrectedCellMask
    Use objects or an image as a mask?:Objects
    Select object for mask:ExpandedBrightROI
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    Invert the mask?:Yes

IdentifySecondaryObjects:[module_num:37|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
    Select the input objects:AllNuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:MaskedCorrectedCellMask
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    Name the outline image:CellOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Nuclei
    Retain outlines of the new primary objects?:Yes
    Name the new primary object outlines:NucleiOutlines
    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0006,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:38|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureCorrelation:[module_num:39|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
    Hidden:4
    Hidden:3
    Select an image to measure:Hoechst
    Select an image to measure:Alexa568
    Select an image to measure:CellMask
    Select an image to measure:Alexa568
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei
    Select an object to measure:Cells
    Select an object to measure:Cytoplasm

MeasureObjectIntensity:[module_num:40|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
    Hidden:3
    Select an image to measure:Hoechst
    Select an image to measure:Alexa568
    Select an image to measure:CellMask
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells

MeasureObjectNeighbors:[module_num:41|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:42|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:43|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectRadialDistribution:[module_num:44|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
    Hidden:3
    Hidden:3
    Hidden:1
    Select an image to measure:Hoechst
    Select an image to measure:CellMask
    Select an image to measure:Alexa568
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:45|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:46|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
    Hidden:3
    Hidden:3
    Hidden:3
    Select an image to measure:Hoechst
    Select an image to measure:CellMask
    Select an image to measure:Alexa568
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Texture scale to measure:3
    Angles to measure:Horizontal
    Texture scale to measure:5
    Angles to measure:Horizontal
    Texture scale to measure:10
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Objects

SaveImages:[module_num:47|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notes:['Save an outline image of the expanded bright ROI outlines, organized by plate barcode.']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
    Select the type of image to save:Image
    Select the image to save:BrightROIOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>_BrightROI
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines/\\\\g<Barcode>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:48|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notes:['Save an outline image of the scratch/well edge outlines, organized by plate barcode.']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
    Select the type of image to save:Image
    Select the image to save:ScratchOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>_Scratch
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines/\\\\g<Barcode>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:49|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>_NucleiOutlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines/\\\\g<Barcode>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>_CellOutlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines/\\\\g<Barcode>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:51|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:image.csv
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:object.csv
    Use the object name for the file name?:No
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
